CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:406
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['This module will prepare ilastik stacks for the ilastik cell classification pipeline.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['No metadata.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<filename>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Here only _ilastik.tiff files are selected.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "_ilastik.tiff")
    Name to assign these images:Ilastik
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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notes:['No groups.']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
    Do you want to group your images?:No
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
SmoothMultichannel:[module_num:5|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notes:['This filter will remove strong, single outlier pixels from the images, which sometimes occur in IMC images.']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
    Select the input image:Ilastik
    Name the output image:IlastikFil
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

SummarizeStack:[module_num:6|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notes:["This calculates an  'average' of all channels and multiplies it with 100.", 'Thus an average count of 0.1 (over all channels) will correspond to 10 in an uint16 image.', '', 'This allows to easily discriminate forground and background.', '', 'These images can be outside of the allowed 0-1 range, thus they will be truncated to the valid range in the following ImageMath module.']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
    Select the input image:IlastikFil
    Conversion method:Python Function
    Name the output image:ScaledMeanPrep
    Input a Python function:lambda x, axis: np.mean(x, axis=axis)*100

ImageMath:[module_num:7|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notes:['This guarantees that values will be between 0-1']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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ScaledMean
    Image or measurement?:Image
    Select the first image:ScaledMeanPrep
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
StackImages:[module_num:8|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notes:['Add the summary channel as first channel.']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
    Name the output image:IlastikExp
    Hidden:2
    Image name:ScaledMean
    Image name:IlastikFil

Resize:[module_num:9|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notes:['Scaling up the images 2x makes pixel classificaiton easier.']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
    Select the input image:IlastikExp
    Name the output image:Ilastik2x
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:2
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    Interpolation method:Bilinear
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    Additional image count:0

CropImage:[module_num:10|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notes:['This function crops random sections from the images, that are used for training.', '', 'The filename is used as a random seed.']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
    Select the input image:Ilastik2x
    Name the output image:Ilastikcropped
    W width:500
    H height:500
    Crop random or specified section?:Crop random section based on metadata.
    X of upper left corner:0
    Y of upper left corner:0
    Optional Random Seed:\g<filename>
    Additional image count:0

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:Ilastik2x
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ilastik
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_s2
    Saved file format:h5
    Output file location:Same folder as image|scaled
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:12|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notes:['Saves the crop together with the coordinates.', 'This is important to track back were the random crops were exactly taken.']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
    Select the type of image to save:Image
    Select the image to save:Ilastikcropped
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ilastik
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_x\g<Crop_Ilastikcropped_x>_y\g<Crop_Ilastikcropped_y>_w\g<Crop_Ilastikcropped_w>_h\g<Crop_Ilastikcropped_h>
    Saved file format:h5
    Output file location:Default Output Folder|crops
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
CreateBatchFiles:[module_num:13|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/home/vitoz
    Cluster root path:/home/vitoz
