CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:['Select again all the files in the `tiff` folder']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    :
    Filter images?:Images only
    Select the rule criteria:and (extension does isimage) (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|svn_version:'Unknown'|variable_revision_number:6|show_window:False|notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Extract metadata?:No
    Metadata data type:Text
    Metadata types:{}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^site(?P<Site>[0-9]+)_
    Regular expression to extract from folder name:(?P<Date>[0-9]{4}_[0-9]{2}_[0-9]{2})$
    Extract metadata from:All images
    Select the filtering criteria:and (file does contain "")
    Metadata file location:Elsewhere...|
    Match file and image metadata:[]
    Use case insensitive matching?:No
    Metadata file name:
    Does cached metadata exist?:No

NamesAndTypes:[module_num:3|svn_version:'Unknown'|variable_revision_number:8|show_window:False|notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Assign a name to:Images matching rules
    Select the image type:Grayscale image
    Name to assign these images:DNA
    Match metadata:[]
    Image set matching method:Order
    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
    Maximum intensity:255.0
    Process as 3D?:No
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:1.0
    Select the rule criteria:and (file does endwith "_Probabilities.tiff")
    Name to assign these images:ProbabStack
    Name to assign these objects:Cell
    Select the image type:Color image
    Set intensity range from:Image bit-depth
    Maximum intensity:255.0

Groups:[module_num:4|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Do you want to group your images?:No
    grouping metadata count:1
    Metadata category:Site

ColorToGray:[module_num:5|svn_version:'Unknown'|variable_revision_number:4|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:ProbabStack
    Conversion method:Split
    Image type:Channels
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
    Convert red to gray?:Yes
    Name the output image:Nuc
    Convert green to gray?:Yes
    Name the output image:Cyto
    Convert blue to gray?:Yes
    Name the output image:Bg
    Convert hue to gray?:Yes
    Name the output image:OrigHue
    Convert saturation to gray?:Yes
    Name the output image:OrigSaturation
    Convert value to gray?:Yes
    Name the output image:OrigValue
    Channel count:3
    Channel number:1
    Relative weight of the channel:1.0
    Image name:Nuc
    Channel number:2
    Relative weight of the channel:1.0
    Image name:Cyto
    Channel number:3
    Relative weight of the channel:1.0
    Image name:Bg

ImageMath:[module_num:6|svn_version:'Unknown'|variable_revision_number:5|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:NucCyto
    Image or measurement?:Image
    Select the first image:Cyto
    Multiply the first image by:1.0
    Measurement:
    Image or measurement?:Image
    Select the second image:Nuc
    Multiply the second image by:1.0
    Measurement:

Smooth:[module_num:7|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:Nuc
    Name the output image:NucSmooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:4
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes

IdentifyPrimaryObjects:[module_num:8|svn_version:'Unknown'|variable_revision_number:14|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:NucSmooth
    Name the primary objects to be identified:NucleiPrimary
    Typical diameter of objects, in pixel units (Min,Max):7,25
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:7.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
    Maximum number of objects:500
    Display accepted local maxima?:No
    Select maxima color:Blue
    Use advanced settings?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
    Manual threshold:0.0
    Select the measurement to threshold with:None
    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:9|svn_version:'Unknown'|variable_revision_number:3|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select object sets to measure:NucleiPrimary
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:10|svn_version:'Unknown'|variable_revision_number:8|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the objects to filter:NucleiPrimary
    Name the output objects:NucFil
    Select the filtering mode:Measurements
    Select the filtering method:Limits
    Select the objects that contain the filtered objects:Nuclei
    Select the location of the rules or classifier file:Elsewhere...|
    Rules or classifier file name:rules.txt
    Class number:1
    Measurement count:1
    Additional object count:0
    Assign overlapping child to:Both parents
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
    Maximum value:1.0

ExpandOrShrinkObjects:[module_num:11|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input objects:NucFil
    Name the output objects:NucShrunk
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No

IdentifySecondaryObjects:[module_num:12|svn_version:'Unknown'|variable_revision_number:10|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input objects:NucShrunk
    Name the objects to be identified:CellsSecondary
    Select the method to identify the secondary objects:Propagation
    Select the input image:NucCyto
    Number of pixels by which to expand the primary objects:10
    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
    Discard the associated primary objects?:No
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0, 1.0
    Manual threshold:0.0
    Select the measurement to threshold with:None
    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:10
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
    Thresholding method:Otsu

ExpandOrShrinkObjects:[module_num:13|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:False|wants_pause:False]
    Select the input objects:CellsSecondary
    Name the output objects:CellsShrunk
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No

ResizeObjects:[module_num:14|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input object:CellsSecondary
    Name the output object:RescaledCells
    Method:Factor
    Factor:0.5
    Width:100
    Height:100
    Select the image with the desired dimensions:None

ResizeObjects:[module_num:15|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input object:NucShrunk
    Name the output object:RescaledNuc
    Method:Factor
    Factor:0.5
    Width:100
    Height:100
    Select the image with the desired dimensions:None

IdentifyTertiaryObjects:[module_num:16|svn_version:'Unknown'|variable_revision_number:3|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the larger identified objects:RescaledCells
    Select the smaller identified objects:RescaledNuc
    Name the tertiary objects to be identified:CytTertiary
    Shrink smaller object prior to subtraction?:No

FilterObjects:[module_num:17|svn_version:'Unknown'|variable_revision_number:8|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the objects to filter:RescaledCells
    Name the output objects:CellsFilt
    Select the filtering mode:Measurements
    Select the filtering method:Limits
    Select the objects that contain the filtered objects:None
    Select the location of the rules or classifier file:Elsewhere...|
    Rules or classifier file name:rules.txt
    Class number:1
    Measurement count:1
    Additional object count:1
    Assign overlapping child to:Both parents
    Select the measurement to filter by:Children_CytTertiary_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:Yes
    Maximum value:1
    Select additional object to relabel:CytTertiary
    Name the relabeled objects:CytFilt

IdentifyTertiaryObjects:[module_num:18|svn_version:'Unknown'|variable_revision_number:3|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the larger identified objects:CellsFilt
    Select the smaller identified objects:CytFilt
    Name the tertiary objects to be identified:NucTertiary
    Shrink smaller object prior to subtraction?:No

FilterObjects:[module_num:19|svn_version:'Unknown'|variable_revision_number:8|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the objects to filter:CellsFilt
    Name the output objects:Cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
    Select the objects that contain the filtered objects:None
    Select the location of the rules or classifier file:Elsewhere...|
    Rules or classifier file name:rules.txt
    Class number:1
    Measurement count:1
    Additional object count:2
    Assign overlapping child to:Both parents
    Select the measurement to filter by:Children_NucTertiary_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:Yes
    Maximum value:1
    Select additional object to relabel:NucTertiary
    Name the relabeled objects:Nuclei
    Select additional object to relabel:CytFilt
    Name the relabeled objects:Cytoplasm

ConvertObjectsToImage:[module_num:20|svn_version:'Unknown'|variable_revision_number:1|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input objects:Nuclei
    Name the output image:NucImage
    Select the color format:uint16
    Select the colormap:Default

ConvertObjectsToImage:[module_num:21|svn_version:'Unknown'|variable_revision_number:1|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input objects:Cytoplasm
    Name the output image:CytImage
    Select the color format:uint16
    Select the colormap:Default

ImageMath:[module_num:22|svn_version:'Unknown'|variable_revision_number:5|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CellImage
    Image or measurement?:Image
    Select the first image:NucImage
    Multiply the first image by:1.0
    Measurement:
    Image or measurement?:Image
    Select the second image:CytImage
    Multiply the second image by:1.0
    Measurement:

SaveImages:[module_num:23|svn_version:'Unknown'|variable_revision_number:15|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:ProbabStack
    Enter single file name:OrigBlue
    Number of digits:4
    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|masks
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...|
    How to save the series:T (Time)

SaveImages:[module_num:24|svn_version:'Unknown'|variable_revision_number:15|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:NucImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:ProbabStack
    Enter single file name:OrigBlue
    Number of digits:4
    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nucmask
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|masks
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...|
    How to save the series:T (Time)

SaveImages:[module_num:25|svn_version:'Unknown'|variable_revision_number:15|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:CytImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:ProbabStack
    Enter single file name:OrigBlue
    Number of digits:4
    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cytmask
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|masks
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...|
    How to save the series:T (Time)

CreateBatchFiles:[module_num:26|svn_version:'Unknown'|variable_revision_number:8|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:False|wants_pause:False]
    Store batch files in default output folder?:Yes
    Output folder path:/mnt/f2160748-a937-44bd-aca8-3adb8a839612/Data/Analysis/cp4_segmentation_example/cpout
    Are the cluster computers running Windows?:No
    Hidden- in batch mode:No
    Hidden- in distributed mode:No
    Hidden- default input folder at time of save:/home/vitoz
    Hidden- revision number:0
    Hidden- from old matlab:No
    Local root path:/home/vitoz
    Cluster root path:/home/vitoz
