CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['This module will prepare ilastik stacks for the ilastik cell classification pipeline.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['No metadata.']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['Here only _ilastik.tiff files are selected.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Select the rule criteria:and (file does contain "_ilastik.tiff") (file doesnot contain "_probabilities") (file doesnot contain "_s2")
    Name to assign these images:Ilastik
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['No groups.']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
    Do you want to group your images?:No
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
Smooth Multichannel:[module_num:5|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notes:['This filter will remove strong, single outlier pixels from the images, which sometimes occur in IMC images.']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
    Select the input image:Ilastik
    Name the output image:IlastikFil
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Outlier neighbourhood:3
    Outlier Treshold:50.0

Resize:[module_num:6|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notes:['Scaling up the images 2x makes pixel classificaiton easier.']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
    Select the input image:IlastikFil
    Name the output image:Ilastik2x
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:2
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    Interpolation method:Bilinear
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    Additional image count:0

Crop bb:[module_num:7|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notes:['This function crops random sections from the images, that are used for training.']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
    Select the input image:Ilastik2x
    Name the output image:Ilastikcropped
    W width:500
    H height:500
    Crop random or specified section?:Crop random sections of the image
    X of upper left corner:0
    Y of upper left corner:0
    Additional image count:0

SaveImages Ilastik:[module_num:8|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notes:['This will save the cropped ilastik stacks in a format that gets directly recognized as xyc in Ilastik 1.2.2']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
    Select the type of image to save:Image
    Select the image to save:Ilastikcropped
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Ilastik
    Enter single file name:OrigBlue
    Number of digits:4
    Append a suffix to the image file name?:Yes
    Text to append to the image name:_s2_x\\\\g<Crop_Ilastikcropped_x>_y\\\\g<Crop_Ilastikcropped_y>_w\\\\g<Crop_Ilastikcropped_w>_h\\\\g<Crop_Ilastikcropped_h>
    Saved file format:tiff
    Output file location:Default Output Folder|/home/raza/Data/20170811_exampleanalysis/analysis/ilastik
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
    Select colormap:gray
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...|
    Saved movie format:avi

SaveImages Ilastik:[module_num:9|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notes:['This will save the ilastik stacks in a format that gets directly recognized as xyc in Ilastik 1.2.2']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
    Select the type of image to save:Image
    Select the image to save:Ilastik2x
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Ilastik
    Enter single file name:OrigBlue
    Number of digits:4
    Append a suffix to the image file name?:Yes
    Text to append to the image name:_s2
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
    Select colormap:gray
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...|
    Saved movie format:avi
