CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^site(?P<Site>[0-9]+)_
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Select the rule criteria:and (file does contain "_probabilities.tiff") (file doesnot contain "_s2_s2")
    Name to assign these images:ProbabStack
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:ProbabStack
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:Nuc
    Convert green to gray?:Yes
    Name the output image:Cyto
    Convert blue to gray?:Yes
    Name the output image:Bg
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
ImageMath:[module_num:6|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:NucCyto
    Image or measurement?:Image
    Select the first image:Cyto
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Nuc
    Multiply the second image by:1.0
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
Smooth:[module_num:7|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
    Select the input image:Nuc
    Name the output image:NucFil
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:4
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:NucFil
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,30
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Adaptive
    Thresholding method:MCT
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Method to calculate adaptive window size:Custom
    Size of adaptive window:50
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
MeasureObjectSizeShape:[module_num:9|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:Yes

FilterObjects:[module_num:10|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
    Name the output objects:NucFil
    Select the object to filter:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:NucFil
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:NucCyto
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:2
    Threshold strategy:Automatic
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
RescaleObjects:[module_num:12|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
    Select the input objects:Cells
    Name the output objects:RescaledCells
    Select the operation:Downscale objects with a scaling factor
    Factor to scale the object mask:0.5

ConvertObjectsToImage:[module_num:13|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
    Select the input objects:RescaledCells
    Name the output image:CellImage
    Select the color format:Grayscale
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:CellImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:ProbabStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask
    Saved file format:tiff
    Output file location:Same folder as image|/mnt/bbvolume/server_homes/jwindh/Data/VitoExample/analysis/ilastik
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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