CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Select the rule criteria:and (file does endwith "_full.tiff") (file doesnot contain "cropmask")
    Name to assign these images:FullStack
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does endwith "_probabilities.tiff")
    Name to assign these images:ProbabStack
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does endwith "_mask.tiff")
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    Name to assign these objects:cell
    Select the image type:Objects
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    Retain outlines of loaded objects?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Resize:[module_num:5|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
    Select the input image:ProbabStack
    Name the output image:ProbSegmentation
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.5
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    Interpolation method:Bilinear
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    Additional image count:0

Smooth Multichannel:[module_num:6|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
    Select the input image:FullStack
    Name the output image:FullStackFiltered
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Outlier neighbourhood:3
    Outlier Treshold:50.0

Smooth Multichannel:[module_num:7|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
    Select the input image:FullStackFiltered
    Name the output image:FullStackSmoothed
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:1.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Outlier neighbourhood:3
    Outlier Treshold:50.0

MeasureObjectNeighbors:[module_num:8|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
    Select objects to measure:cell
    Select neighboring objects to measure:cell
    Method to determine neighbors:Within a specified distance
    Neighbor distance:8
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ObjectNeighborCount
    Select colormap:Default
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:PercentTouching
    Select a colormap:Default

MeasureObjectIntensity Multichannel:[module_num:9|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
    Hidden:4
    Select an image to measure:FullStack
    Select an image to measure:ProbSegmentation
    Select an image to measure:FullStackFiltered
    Select an image to measure:FullStackSmoothed
    Number of channels:24
    Number of channels:3
    Number of channels:24
    Number of channels:24
    Select objects to measure:cell

SaveImages:[module_num:10|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
    Select the type of image to save:Objects
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    Select the objects to save:cell
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    Select method for constructing file names:From image filename
    Select image name for file prefix:FullStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask
    Saved file format:tiff
    Output file location:Default Output Folder|/mnt/bbvolume/server_homes/jwindh/Data/VitoExample/cpout
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|/mnt/bbvolume/server_homes/jwindh/Data/VitoExample/cpout
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|/mnt/bbvolume/server_homes/jwindh/Data/VitoExample/cpout
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
