CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Select again all the files in the tiff folder']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "_Probabilities.tiff")
    Name to assign these images:ProbabStack
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:ProbabStack
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:1
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    Image name:Nuc
    Channel number:2
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    Image name:Cyto
    Channel number:3
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    Image name:Bg

ImageMath:[module_num:6|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:NucCyto
    Image or measurement?:Image
    Select the first image:Cyto
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Nuc
    Multiply the second image by:1.0
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
Smooth:[module_num:7|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
    Select the input image:Nuc
    Name the output image:NucFil
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:4
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:NucFil
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):7,25
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:10|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
    Select the objects to filter:Nuclei
    Name the output objects:NucFil
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:NucFil
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:NucCyto
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0, 1.0
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    Log transform before thresholding?:No
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
ResizeObjects:[module_num:12|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
    Select the input object:Cells
    Name the output object:RescaledCells
    Method:Factor
    Factor:0.5
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
ConvertObjectsToImage:[module_num:13|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
    Select the input objects:RescaledCells
    Name the output image:CellImage
    Select the color format:uint16
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:ProbabStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask
    Saved file format:tiff
    Output file location:Default Output Folder|/mnt/bbvolume/server_homes/jwindh/Data/VitoExample/analysis/ilastik
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
CreateBatchFiles:[module_num:15|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/home/vitoz
    Cluster root path:/home/vitoz
