CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Select all the files in the `tiffs` folder']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['No metadata.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Filename>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Here only` _ilastik.tiff` files are selected.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "_ilastik.tiff")
    Name to assign these images:Ilastik
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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notes:['No groups.']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
    Do you want to group your images?:No
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
Smooth Multichannel:[module_num:5|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notes:['This filter will remove strong, single outlier pixels from the images, which sometimes occur in IMC images.']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
    Select the input image:Ilastik
    Name the output image:IlastikFil
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:No

Summarize Stack:[module_num:6|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
    Select the input image:IlastikFil
    Conversion method:Python Function
    Name the output image:IlastikSum
    Input a Python function:np.sum

StackImages:[module_num:7|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
    Name the output image:IlastikStacked
    Hidden:2
    Image name:IlastikSum
    Image name:IlastikFil

Resize:[module_num:8|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notes:['Scaling up the images 2x makes pixel classificaiton easier.']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
    Select the input image:IlastikStacked
    Name the output image:Ilastik2x
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:2
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    Interpolation method:Bilinear
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    Additional image count:0

Crop bb:[module_num:9|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notes:['This function crops random sections from the images, that are used for training.']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
    Select the input image:Ilastik2x
    Name the output image:Ilastikcropped
    W width:500
    H height:500
    Crop random or specified section?:Crop random section based on metadata.
    X of upper left corner:0
    Y of upper left corner:0
    Optional Random Seed:\g<Filename>
    Additional image count:0

SaveImages H5:[module_num:10|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notes:['Save the scaled images as `hdf5` images in the `tiffs` folder.']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
    Select the type of image to save:Image
    Select the image to save:Ilastik2x
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ilastik
    Enter single file name:OrigBlue
    Number of digits:4
    Append a suffix to the image file name?:Yes
    Text to append to the image name:_s2
    Saved file format:h5
    Output file location:Default Output Folder sub-folder|scaled
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...|

SaveImages H5:[module_num:11|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notes:['Save the random crops for ilastik training in the `ilastik subfolder`.', "Don't forget to change the `Default Output Folder` in `View output settings`"]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
    Select the type of image to save:Image
    Select the image to save:Ilastikcropped
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ilastik
    Enter single file name:OrigBlue
    Number of digits:4
    Append a suffix to the image file name?:Yes
    Text to append to the image name:_s2_x\g<Crop_Ilastikcropped_x>_y\g<Crop_Ilastikcropped_y>_w\g<Crop_Ilastikcropped_w>_h\g<Crop_Ilastikcropped_h>
    Saved file format:h5
    Output file location:Default Output Folder sub-folder|crops
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...|

CreateBatchFiles:[module_num:12|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/home/vitoz
    Cluster root path:/home/vitoz
