CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['This module prepares upscaled and croped image stacks for ilastik pixel classification.', 'Select the tiffs folder and drop it here.', '', 'Default Output Folder: path/to/analysis/ilastik']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The filename is extracted from individual images.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<filename>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Only _ilastik.tiff files are selected. These multi-channel images contain the channels which were selected for ilastik pixel classification via the ilastik column in the panel file. The channel order can be found in the related _ilastik.csv files.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "_ilastik.tiff")
    Name to assign these images:Ilastik
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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notes:['No groups.']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
    Do you want to group your images?:No
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
SummarizeStack:[module_num:5|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notes:['This module calculates an average across all channels and multiplies it with 100.', 'Thus an average count of 0.1 (over all channels) will correspond to 10 in an uint16 image.', '', 'This allows to easily discriminate forground and background for pixel labelling.', '']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
    Select the input image:Ilastik
    Conversion method:Python Function
    Name the output image:ScaledMeanPrep
    Input a Python function:lambda x, axis: np.mean(x, axis=axis)*100

ImageMath:[module_num:6|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notes:['This module clips intensities to the range of 0 and 1 and therefore avoids out of range errors.']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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ScaledMean
    Image or measurement?:Image
    Select the first image:ScaledMeanPrep
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
StackImages:[module_num:7|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notes:['This module adds the mean intensity channel as first channel to the multi-channel ilastik stack.']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
    Name the output image:IlastikExp
    Hidden:2
    Image name:ScaledMean
    Image name:Ilastik

Resize:[module_num:8|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notes:['Images are upscaled by a factor of 2. This approach facilitates pixel labelling using ilastik. Down scaling is perfomed in the following pipelines.']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
    Select the input image:IlastikExp
    Name the output image:Ilastik2x
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:2
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    Interpolation method:Bilinear
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    Additional image count:0

CropImage:[module_num:9|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notes:['This module crops random widthxheight sections of the ilastik stack. These smaller images are used for ilastik pixel labelling', 'The filename is used as a random seed to ensure reproducibility.']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
    Select the input image:Ilastik2x
    Name the output image:Ilastikcropped
    W width:500
    H height:500
    Crop random or specified section?:Crop random section based on metadata.
    X of upper left corner:0
    Y of upper left corner:0
    Optional Random Seed:\g<filename>
    Additional image count:0

SaveImages:[module_num:10|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notes:['The upscaled ilastik stacks are saved in the tiffs folder in .h5 format. Once the ilastik pixel classifier is trained, these images are used for pixel classification. ']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
    Select the type of image to save:Image
    Select the image to save:Ilastik2x
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ilastik
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_s2
    Saved file format:h5
    Output file location:Same folder as image|scaled
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:11|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notes:['This module saves the ilastik image crops in the ilastik folder (Default Output Folder - please adjust). ', 'The filename is written out as <filename>_<x_coordinate>_<y_coordinate>_<width>_<height>.']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
    Select the type of image to save:Image
    Select the image to save:Ilastikcropped
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ilastik
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_x\g<Crop_Ilastikcropped_x>_y\g<Crop_Ilastikcropped_y>_w\g<Crop_Ilastikcropped_w>_h\g<Crop_Ilastikcropped_h>
    Saved file format:h5
    Output file location:Default Output Folder|crops
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

CreateBatchFiles:[module_num:12|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/home/vitoz
    Cluster root path:/home/vitoz
