CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['This pipeline imports the pixel probabilities generated by Ilastik and performs cell segmentation.', 'Please select the ilastik folder and drop it here.', '', 'Default Output Folder: path/to/analysis/cpout']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['We select all files ending with _Probabilities.tiff (these images contain the ilastik pixel probabilites) and read them in as color image']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "_Probabilities.tiff")
    Name to assign these images:ProbabStack
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['The images are split into the three individual channels (1: nucleus (red); 2: cytoplasm (green); 3: background (blue)).']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
    Select the input image:ProbabStack
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:1
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    Image name:Nuc
    Channel number:2
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    Image name:Cyto
    Channel number:3
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    Image name:Bg

ImageMath:[module_num:6|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notes:['The nulcear and cytoplasmic channels are summed up to form a single channel indicating the full cell probability.']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:NucCyto
    Image or measurement?:Image
    Select the first image:Cyto
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Nuc
    Multiply the second image by:1.0
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
Smooth:[module_num:7|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notes:['The nuclear probabilities are smoothed using a gaussian filter.']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
    Select the input image:Nuc
    Name the output image:NucFil
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:4
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Based on the smoothed nuclear channel, nuclear objects are detected.']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
    Select the input image:NucFil
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):7,25
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
MeasureObjectSizeShape:[module_num:9|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notes:['The size and shape features of the nuclei are measured.']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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:10|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notes:['Very small nuclei (< Minimum value) are removed from the set of nuclei. ']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
    Select the objects to filter:Nuclei
    Name the output objects:NucFil
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
IdentifySecondaryObjects:[module_num:11|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notes:['Starting from the filtered nuclei the segmentation mask is expanded along the nuclear+cytoplasm probabilities. This will result in the final cell segmentation masks.']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
    Select the input objects:NucFil
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:NucCyto
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0, 1.0
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    Log transform before thresholding?:No
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
ResizeObjects:[module_num:12|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notes:['In the previous pipeline images were upscaled by a factor of 2 to facilitate ilastik pixel labelling. Now, images are downscaled to match the initial dimensions.']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
    Select the input object:Cells
    Name the output object:RescaledCells
    Method:Factor
    Factor:0.5
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
ConvertObjectsToImage:[module_num:13|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notes:['The downscaled segmentation masks are converted into objects.']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
    Select the input objects:RescaledCells
    Name the output image:CellImage
    Select the color format:uint16
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
Resize:[module_num:14|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notes:['The pixel probability images are downscaled to match the initial image dimensions.']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
    Select the input image:ProbabStack
    Name the output image:ProbabStackResize
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.5
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    Interpolation method:Bilinear
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    Additional image count:0

SaveImages:[module_num:15|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notes:['The segmentation masks are saved as single-channel, 16-bit .tiff images.']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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:ProbabStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|masks
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:16|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notes:['The downscaled probability images are saved as 16-bit .tiff images.']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
    Select the type of image to save:Image
    Select the image to save:ProbabStackResize
    Select method for constructing file names:From image filename
    Select image name for file prefix:ProbabStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_s1
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|probabilities
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

CreateBatchFiles:[module_num:17|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/home/vitoz
    Cluster root path:/home/vitoz
